// DIGE tools
// July 16, 2018

macro "Save Inverted FITS" {
	run("Flip Vertically");
	run("FITS...", "");
	run("Flip Vertically");
}
macro "Cy5 Action Tool - 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" {
     run("Red");
     run("RGB Color");
     run("Paste Control...");
     setPasteMode("Add");
     setPasteMode("Add");
     run("Copy");
     }

  macro "Cy3 & Save Action Tool - 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" {
     run("Green");
     run("RGB Color");
     run("Paste");
     saveAs("Jpeg");
     }

  macro "Make Stack & Save Action Tool - CfffCeeeCdddCcccCbbbCaaaC999C888C777C666C555D00D01D02D03D04D05D06D07D08D10D18D20D28D30D38D40D48D50D54D55D56D57D58D59D5aD5bD5cD5dD5eD5fD60D64D68D6fD70D74D78D7fD80D84D88D8fD90D91D92D93D94D95D96D97D98D9fDa4DafDb4DbfDc4DcfDd4DdfDe4DefDf4Df5Df6Df7Df8Df9DfaDfbDfcDfdDfeDff" {
		run("Images to Stack", "name=Stack title=[] use");
 		run("Animation Options...", "speed=2 first=1 last=2");
 		run("8-bit");
     }


  macro "Import XY... Action Tool - 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" {
	// ask for a file to be imported
	fileName = File.openDialog("Select the file to import");
	allText = File.openAsString(fileName);
	tmp = split(fileName,".");
	// get file format {txt, csv}
	posix = tmp[lengthOf(tmp)-1];
	// parse text by lines
	text = split(allText, "\n");

	// define array for points
	var xpoints = newArray;
	var ypoints = newArray;

	// in case input is in TXT format
	if (posix=="txt") {
		print("importing TXT point set...");
		//these are the column indexes
		hdr = split(text[0]);
		nbPoints = split(text[1]);
		iX = 0; iY = 1;
	// loading and parsing each line
	for (i = 2; i < (text.length); i++){
	   line = split(text[i]," ");
	   setOption("ExpandableArrays", true);
	   xpoints[i-2] = parseInt(line[iX]);
	   ypoints[i-2] = parseInt(line[iY]);
	   print("p("+i-1+") ["+xpoints[i-2]+"; "+ypoints[i-2]+"]");
		}
	// in case input is in CSV format
	} else if (posix=="csv") {
		print("importing CSV point set...");
	//these are the column indexes
	hdr = split(text[0]);
	iLabel = 0; iX = 1; iY = 2;
	// loading and parsing each line
	for (i = 1; i < (text.length); i++){
	   line = split(text[i]," ,");
	   setOption("ExpandableArrays", true);
	   xpoints[i-1] = parseInt(line[iX]);
	//Inverts the Y coordinate by subtracting from the width
	   ypoints[i-1] = parseInt(getHeight()-line[iY]);
	   print("p("+i+") ["+xpoints[i-1]+"; "+ypoints[i-1]+"]");
		}
	// in case of any other format
	} else {
	print("not supported format...");
	}

	// show the points in the image
	makeSelection("point", xpoints, ypoints);
	//setTool("multipoint");
	run("Point Tool...", "type=Dot color=Cyan size=Large show counter=0");
	run("Point Tool...", "type=Dot color=Cyan size=Large label show counter=0");
	}

macro "Export XY... Action Tool - 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" {
// clean results
run("Clear Results");
// get all points
getSelectionCoordinates(xCoordinates, yCoordinates);

// chose name pattern for exporting
fileName = File.openDialog("Select the file for export");

// Exporting as TXT format (ITK compatible)
file = File.open(fileName+".txt");
print(file, "point");
print(file, lengthOf(xCoordinates) );
for(i=0; i<lengthOf(xCoordinates); i++) {
    print(file, xCoordinates[i] + " " + yCoordinates[i]);
}

// export as CSV file
for(i=0; i<lengthOf(xCoordinates); i++) {
    setResult("X", i, xCoordinates[i]);
    setResult("Y", i, yCoordinates[i]);
}
updateResults();
saveAs("Results", fileName+".csv");
}
